PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = tid_psam_audiotest6
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 3
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    SoundComponent sound_1
      sound [set every repeat] = A
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ParallelOutComponent p_port
      address = 0x0378
      register = EIO
      startData = 1
      startVal [condition] = $sound_1.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine trial
